global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

    extensions:
        # ADAPT THIS LOCATION TO YOUR PERSONAL PATH IF NECESSARY
        - ''

hardware:

    mydummypulser:
        module.Class: 'pulser_dummy.PulserDummy'

    microwave_dummy:
        module.Class: 'microwave.mw_source_dummy.MicrowaveDummy'
        gpib_address: 'dummy'
        gpib_timeout: 20

    mydummyspm:
        module.Class: 'spm.spm_dummy.SPMDummy'
        libpath: 'C:\\Data\\AttoDRY_Data'

    slow_counter_dummy:
        module.Class: 'slow_counter_dummy.SlowCounterDummy'
        clock_frequency: 100 # in Hz

    fastcounter_dummy:
        module.Class: 'fast_counter_dummy.FastCounterDummy'
        gated: True

logic:

    afm_scanner_logic:
        module.Class: 'afm_confocal_logic.AFMConfocalLogic'
        # ADAPT THIS LOCATION TO YOUR PERSONAL PATH
        meas_path: 'C:\\Data\\AttoDRY_Data'
        connect:
            spm_device: 'mydummyspm'
            savelogic: 'savelogic'
            counter_device: 'slow_counter_dummy'
            counter_logic: 'counterlogic'
            fitlogic: 'fitlogic'
            pulser: 'mydummypulser'
            microwave: 'microwave_dummy' 
            pulsed_master: 'pulsedmasterlogic'

    kernellogic:
        module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
        remoteaccess: True

    counterlogic:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'slow_counter_dummy'
            savelogic: 'savelogic'
    
    fitlogic:
        module.Class: 'fit_logic.FitLogic'

    savelogic:
        module.Class: 'save_logic.SaveLogic'
        # ADAPT THIS LOCATION TO YOUR PERSONAL PATH
        win_data_directory: 'C:\\Data\\Qudi_Data'
        log_into_daily_directory: True


    pulsedmasterlogic:
        module.Class: 'pulsed.pulsed_master_logic.PulsedMasterLogic'
        connect:
            pulsedmeasurementlogic: 'pulsedmeasurementlogic'
            sequencegeneratorlogic: 'sequencegeneratorlogic'

    sequencegeneratorlogic:
        module.Class: 'pulsed.sequence_generator_logic.SequenceGeneratorLogic'
        #assets_storage_path: 'C:/Users/<username>/saved_pulsed_assets'
        #additional_predefined_methods_path: 'C:\\Custom_dir'  # optional, can also be lists on several folders
        #additional_sampling_functions_path: 'C:\\Custom_dir'  # optional, can also be lists on several folders
        #overhead_bytes: 4294967296  # Not properly implemented yet
        connect:
            pulsegenerator: 'mydummypulser'

    pulsedmeasurementlogic:
        module.Class: 'pulsed.pulsed_measurement_logic.PulsedMeasurementLogic'
        raw_data_save_type: 'text'  # optional
        #additional_extraction_path: 'C:\\Custom_dir\\Methods'  # optional
        #additional_analysis_path: 'C:\\Custom_dir\\Methods'  # optional
        connect:
            fastcounter: 'fastcounter_dummy'
            pulsegenerator: 'mydummypulser'
            fitlogic: 'fitlogic'
            savelogic: 'savelogic'
            microwave: 'microwave_dummy'
    
gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    qafm_gui:
        module.Class: 'qafm.qafm_gui.attoDRY2200GUI'
        connect:
            qafmlogic: 'afm_scanner_logic'
    
    pulsedmeasurement:
        module.Class: 'pulsed.pulsed_maingui.PulsedMeasurementGui'
        connect:
            pulsedmasterlogic: 'pulsedmasterlogic'
